# Generated by Configurator on Tue May 14 15:21:00 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,XYStage,Marzhauser,XYStage
Device,ZAxis,Marzhauser,ZAxis

# Pre-init settings for devices
Property,XYStage,Port,COM4
Property,ZAxis,Port,COM4

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,57600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZAxis,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,ZAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,Mitutoyo_100X
Label,DObjective,2,Mitutoyo_50X
Label,DObjective,1,Mitutoyo_10X
Label,DObjective,0,Mitutoyo_5X

# Configuration presets
# Group: Objective Lens
# Preset: Mitutoyo_10X
ConfigGroup,Objective Lens,Mitutoyo_10X,DObjective,Label,Mitutoyo_10X

# Preset: Objective-F
ConfigGroup,Objective Lens,Objective-F,DObjective,Label,Objective-F

# Preset: Mitutoyo_5X
ConfigGroup,Objective Lens,Mitutoyo_5X,DObjective,Label,Mitutoyo_5X

# Preset: Objective-E
ConfigGroup,Objective Lens,Objective-E,DObjective,Label,Objective-E

# Preset: Mitutoyo_50X
ConfigGroup,Objective Lens,Mitutoyo_50X,DObjective,Label,Mitutoyo_50X

# Preset: Mitutoyo_100X
ConfigGroup,Objective Lens,Mitutoyo_100X,DObjective,Label,Mitutoyo_100X


# Group: Channel

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Binning,4x4


# PixelSize settings
# Resolution preset: Mitutoyo_10X
ConfigPixelSize,Mitutoyo_10X,DObjective,Label,Mitutoyo_10X
PixelSize_um,Mitutoyo_10X,0.726

# Resolution preset: Mitutoyo_5X
ConfigPixelSize,Mitutoyo_5X,DObjective,Label,Mitutoyo_5X
PixelSize_um,Mitutoyo_5X,1.448

# Resolution preset: Mitutoyo_50X
ConfigPixelSize,Mitutoyo_50X,DObjective,Label,Mitutoyo_50X
PixelSize_um,Mitutoyo_50X,0.146

# Resolution preset: Mitutoyo_100X
ConfigPixelSize,Mitutoyo_100X,DObjective,Label,Mitutoyo_100X
PixelSize_um,Mitutoyo_100X,0.073


